CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Origin
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Grayscale
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GrayscaleInverted
    Image or measurement?:Image
    Select the first image:Grayscale
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:Mask
    Name the output object:NucleiObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskImage:[module_num:7|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
    Select the input image:GrayscaleInverted
    Name the output image:NucleiImage
    Use objects or an image as a mask?:Objects
    Select object for mask:NucleiObjects
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:NucleiImage
    Name the primary objects to be identified:NucleoliObject
    Typical diameter of objects, in pixel units (Min,Max):4,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:NucleiObjects
    Name the output image:NucleiObjectsBinary
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:NucleoliObject
    Name the output image:NucleoliObjectsBinary
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:11|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:NucleoliObjectsBinary
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    Select the image to be colored blue:NucleiObjectsBinary
    Name the output image:MergedNucleusNucleoli
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:MergedNucleusNucleoli
    Select method for constructing file names:From image filename
    Select image name for file prefix:Grayscale
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-nucleoli
    Saved file format:png
    Output file location:Default Output Folder sub-folder|nucleoli
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:13|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
    Parent objects:NucleiObjects
    Child objects:NucleoliObject
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ParentChildObjects
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:NucleiObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|features_nucleoli
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:NucleiObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:NucleoliObject
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|features_nucleoli
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:NucleoliObject
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
